PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = FaceOddball
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image_trial
      image [set every repeat] = $f"img/{img}"
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_trial
      Code Type = Py
      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='PsychoPy',
            type='Markers',
            channel_count=1,
            channel_format='string',
            source_id='PsychopyMarkersID321654'
        )
        outlet = StreamOutlet(info)
      Begin Routine:
        outlet.push_sample([category])
  Routine intro
    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome!
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  Routine block_init
    TextComponent text_block_init
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""
        This is block number {block}

        [Press space to continue]
        """
    KeyboardComponent key_resp_block_init
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_end
    TextComponent text_block_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""
        This is the end of block number {block}

        [Press space to continue]
        """
    KeyboardComponent key_resp_block_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent text_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine end
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for participating!
Flow
  Routine intro
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = lists/blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Block': 1},
      {'Block': 2},
      {'Block': 3}]
    Routine block_init
    Routine fix
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = lists\trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'I': 1, 'img': 'face00.jpg', 'category': 'face'},
        {'I': 2, 'img': 'face01.jpg', 'category': 'face'},
        {'I': 3, 'img': 'face02.jpg', 'category': 'face'},
        {'I': 4, 'img': 'face03.jpg', 'category': 'face'},
        {'I': 5, 'img': 'face04.jpg', 'category': 'face'},
        {'I': 6, 'img': 'face05.jpg', 'category': 'face'},
        {'I': 7, 'img': 'face06.jpg', 'category': 'face'},
        {'I': 8, 'img': 'face07.jpg', 'category': 'face'},
        {'I': 9, 'img': 'face08.jpg', 'category': 'face'},
        {'I': 10, 'img': 'face09.jpg', 'category': 'face'},
        {'I': 11, 'img': 'Landscapes_096_h.jpg', 'category': 'landscape'},
        {'I': 12, 'img': 'Landscapes_097_v.jpg', 'category': 'landscape'},
        {'I': 13, 'img': 'Landscapes_098_h.jpg', 'category': 'landscape'},
        {'I': 14, 'img': 'Landscapes_099_v.jpg', 'category': 'landscape'},
        {'I': 15, 'img': 'Landscapes_100_h.jpg', 'category': 'landscape'},
        {'I': 16, 'img': 'Landscapes_101_v.jpg', 'category': 'landscape'},
        {'I': 17, 'img': 'Landscapes_102_h.jpg', 'category': 'landscape'},
        {'I': 18, 'img': 'Landscapes_103_v.jpg', 'category': 'landscape'},
        {'I': 19, 'img': 'Landscapes_104_h.jpg', 'category': 'landscape'},
        {'I': 20, 'img': 'Landscapes_105_v.jpg', 'category': 'landscape'},
        {'I': 21, 'img': 'Landscapes_106_v.jpg', 'category': 'landscape'},
        {'I': 22, 'img': 'Landscapes_107_h.jpg', 'category': 'landscape'},
        {'I': 23, 'img': 'Landscapes_108_v.jpg', 'category': 'landscape'},
        {'I': 24, 'img': 'Landscapes_109_h.jpg', 'category': 'landscape'},
        {'I': 25, 'img': 'Landscapes_110_v.jpg', 'category': 'landscape'}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
      Routine trial
    LoopTerminator trials
    Routine block_end
  LoopTerminator blocks
  Routine end
