PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'data/%s' % (expInfo['tutorial_session'])
  Experiment info = {'tutorial_session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = Visual_audio_EP_Oddball
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image_trial
      image [set every repeat] = $f"img/{img}"
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_trial
      Code Type = Py
      Begin Routine:
        outlet.push_sample([category])
  Routine intro
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    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome!
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo(name='PsychoPy',
            type='Markers',
            channel_count=1,
            channel_format='string',
            source_id='PsychopyMarkersID321654'
        )
        outlet = StreamOutlet(info)
  Routine block_end
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    TextComponent text_block_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""
        This is the end of block number {block}

        [Press space to continue]
        """
    KeyboardComponent key_resp_block_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for participating!
  Routine visual_init
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    TextComponent text_block_init
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""
        This is block number {block}

        [Press space to continue]
        """
    KeyboardComponent key_resp_block_init
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audio_init
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    KeyboardComponent key_resp_block_init_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_block_init_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""
        This is block number {block}

        [Press space to continue]
        """
  Routine play_tone
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import pyaudio
        import numpy as np
      Begin Routine:
        outlet.push_sample([pitch])

        p = pyaudio.PyAudio()
        volume = 0.5
        fs = 44100
        duration = 0.5
        f = frequency

        samples = (np.sin(2 * np.pi * np.arange(fs * duration) * f / fs)).astype(np.float32)
        output_bytes = (volume * samples).tobytes()
        stream = p.open(format=pyaudio.paFloat32,
                        channels=1,
                        rate=fs,
                        output=True)
        stream.write(output_bytes)
        stream.stop_stream()
        stream.close()
        p.terminate()
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine break_btw_oddballs
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    PolygonComponent polygon
      fillColor = white
      shape = star7
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine audio_end
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    TextComponent text_block_end_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""
        This is the end of block number {block}

        [Press space to continue]
        """
    KeyboardComponent key_resp_block_end_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_vis
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    PolygonComponent fixation_cross_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent text_blank_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fix_audio
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  Routine intro
  LoopInitiator blocks_visual loopType="TrialHandler"
    conditionsFile = lists/blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 1},
      {'block': 2},
      {'block': 3},
      {'block': 4},
      {'block': 5},
      {'block': 6},
      {'block': 7},
      {'block': 8},
      {'block': 9}]
    Routine visual_init
    Routine fix_vis
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = lists/trials_faces.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'number_of_pic': 1, 'img': 'face00.jpg', 'category': 'face'},
        {'number_of_pic': 2, 'img': 'face01.jpg', 'category': 'face'},
        {'number_of_pic': 3, 'img': 'face02.jpg', 'category': 'face'},
        {'number_of_pic': 4, 'img': 'face03.jpg', 'category': 'face'},
        {'number_of_pic': 5, 'img': 'face04.jpg', 'category': 'face'},
        {'number_of_pic': 6, 'img': 'face05.jpg', 'category': 'face'},
        {'number_of_pic': 7, 'img': 'face06.jpg', 'category': 'face'},
        {'number_of_pic': 8, 'img': 'face07.jpg', 'category': 'face'},
        {'number_of_pic': 9, 'img': 'face08.jpg', 'category': 'face'},
        {'number_of_pic': 10, 'img': 'face09.jpg', 'category': 'face'},
        {'number_of_pic': 11, 'img': 'Landscapes_096_h.jpg', 'category': 'landscape'},
        {'number_of_pic': 12, 'img': 'Landscapes_097_v.jpg', 'category': 'landscape'},
        {'number_of_pic': 13, 'img': 'Landscapes_098_h.jpg', 'category': 'landscape'},
        {'number_of_pic': 14, 'img': 'Landscapes_099_v.jpg', 'category': 'landscape'},
        {'number_of_pic': 15, 'img': 'Landscapes_100_h.jpg', 'category': 'landscape'},
        {'number_of_pic': 16, 'img': 'Landscapes_101_v.jpg', 'category': 'landscape'},
        {'number_of_pic': 17, 'img': 'Landscapes_102_h.jpg', 'category': 'landscape'},
        {'number_of_pic': 18, 'img': 'Landscapes_103_v.jpg', 'category': 'landscape'},
        {'number_of_pic': 19, 'img': 'Landscapes_104_h.jpg', 'category': 'landscape'},
        {'number_of_pic': 20, 'img': 'Landscapes_105_v.jpg', 'category': 'landscape'},
        {'number_of_pic': 21, 'img': 'Landscapes_106_v.jpg', 'category': 'landscape'}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
      Routine trial
    LoopTerminator trials
    Routine block_end
  LoopTerminator blocks_visual
  Routine break_btw_oddballs
  LoopInitiator blocks_audio loopType="TrialHandler"
    conditionsFile = lists/blocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'block': 1},
      {'block': 2},
      {'block': 3},
      {'block': 4},
      {'block': 5},
      {'block': 6},
      {'block': 7},
      {'block': 8},
      {'block': 9}]
    Routine audio_init
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = lists/trials_audio.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'number_of_sound': 1, 'frequency': 455, 'pitch': 'high'},
        {'number_of_sound': 2, 'frequency': 466, 'pitch': 'high'},
        {'number_of_sound': 3, 'frequency': 449, 'pitch': 'high'},
        {'number_of_sound': 4, 'frequency': 467, 'pitch': 'high'},
        {'number_of_sound': 5, 'frequency': 459, 'pitch': 'high'},
        {'number_of_sound': 6, 'frequency': 449, 'pitch': 'high'},
        {'number_of_sound': 7, 'frequency': 470, 'pitch': 'high'},
        {'number_of_sound': 8, 'frequency': 476, 'pitch': 'high'},
        {'number_of_sound': 9, 'frequency': 443, 'pitch': 'high'},
        {'number_of_sound': 10, 'frequency': 465, 'pitch': 'high'},
        {'number_of_sound': 11, 'frequency': 101, 'pitch': 'low'},
        {'number_of_sound': 12, 'frequency': 105, 'pitch': 'low'},
        {'number_of_sound': 13, 'frequency': 104, 'pitch': 'low'},
        {'number_of_sound': 14, 'frequency': 117, 'pitch': 'low'},
        {'number_of_sound': 15, 'frequency': 115, 'pitch': 'low'},
        {'number_of_sound': 16, 'frequency': 110, 'pitch': 'low'},
        {'number_of_sound': 17, 'frequency': 117, 'pitch': 'low'},
        {'number_of_sound': 18, 'frequency': 108, 'pitch': 'low'},
        {'number_of_sound': 19, 'frequency': 115, 'pitch': 'low'},
        {'number_of_sound': 20, 'frequency': 118, 'pitch': 'low'},
        {'number_of_sound': 21, 'frequency': 105, 'pitch': 'low'},
        {'number_of_sound': 22, 'frequency': 117, 'pitch': 'low'},
        {'number_of_sound': 23, 'frequency': 107, 'pitch': 'low'},
        {'number_of_sound': 24, 'frequency': 111, 'pitch': 'low'},
        {'number_of_sound': 25, 'frequency': 116, 'pitch': 'low'},
        {'number_of_sound': 26, 'frequency': 119, 'pitch': 'low'}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
      Routine play_tone
    LoopTerminator trials_2
    Routine audio_end
  LoopTerminator blocks_audio
  Routine end
